import ij.IJ;
import ij.Prefs;
import java.lang.Runtime;

runtime = Runtime.getRuntime();

//System.out.println("Interest Point Detection bsh - Stephan Janosch");

xmlFile=System.getProperty("xml");
sigma=System.getProperty("sigma");
threshold=System.getProperty("threshold");
channels=System.getProperty("channels");
label=System.getProperty("label");
threadCount=Integer.parseInt(System.getProperty("threadCount"));

Prefs.setThreads(threadCount);

channelsArray=channels.split(",");
channelsString="";

//channel specification
for (i=0;i<channelsArray.length;i++)
{
	channelsString = channelsString + "channel_" +channelsArray[i].toLowerCase()+" ";
}

//interest point, sigma, threshold and find_maxima specification
interestPointSpecString="";
sigmaString="";
thresholdString="";
findString="";
//one channel
if (channelsArray.length==1)
{
	interestPointSpecString="interest_point_specification=[Advanced ...] ";
	sigmaString="sigma="+sigma+" ";
	thresholdString="threshold="+threshold+" ";
	findString="find_maxima ";
}
else
{
	//more channels
	for (i=0;i<channelsArray.length;i++)
	{
		lowerCaseChannel=channelsArray[i].toLowerCase();
		interestPointSpecString = interestPointSpecString + "interest_point_specification_(channel_" +lowerCaseChannel+")=[Advanced ...]  ";
		sigmaString=sigmaString+"sigma_"+lowerCaseChannel+"="+sigma+" ";
		thresholdString=thresholdString+"threshold_"+lowerCaseChannel+"="+threshold+" ";
		findString=findString+"find_maxima_"+lowerCaseChannel+" ";
	}	
}

IJ.run("Detect Interest Points for Registration", 
"select_xml="+xmlFile+" "+
"process_angle=[All angles] "+
"process_illumination=[All illuminations] "+
"process_timepoint=[All Timepoints] "+
"process_channel=[Multiple channels (Select from List)] "+
 
"type_of_interest_point_detection=Difference-of-Gaussian "+
"label_interest_points="+label+" "+
channelsString +
"subpixel_localization=[3-dimensional quadratic fit] "+
interestPointSpecString+
sigmaString+
thresholdString+
findString+
"compute_on=[CPU (Java)]"
);

runtime.exit(0);

//http-post url param2 parm3